PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = grating_trial
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Routines
  Routine BG
    PolygonComponent full_field
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine Grating
    GratingComponent grating
      sf = 3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      tex = sin
      texture resolution = 64
      units = deg
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine BG
    Routine Grating
  LoopTerminator trials
