PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = grating_trial_1
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Routines
  Routine Grating
    GratingComponent grating
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      tex = sin
      texture resolution = 512
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  Routine FFF
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator Trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine FFF
    Routine Grating
  LoopTerminator Trials
